PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'image_size': '512', 'probe_frame': '1', 'debug': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = black
  expName = localizer
  keyboardBackend = ioHub
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Routines
  Routine setupTRIGetc
    RoutineSettingsComponent setupTRIGetc
      saveStartStop = False
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    CodeComponent setup_vbles_trigger
      Code Type = Auto->JS
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      Begin Experiment:
        image_size = int(expInfo['image_size'])
        debug = bool(expInfo['debug'])
        probe_frame = int(expInfo['probe_frame'])
        import time
        dict_answer = {'Living_Things':1,
                       'Nonliving_Things':2,}


        if not debug:
            import pyxid2
            import time

            # get a list of all attached XID devices
            devices = pyxid2.get_xid_devices()

            dev = devices[0] # get the first device to use
            print(dev)
            dev.reset_base_timer()
            dev.reset_rt_timer()
            dev.set_pulse_duration(10)
      Begin Routine:
        win.flip()

        globalClock.reset()
        startTime = globalClock.getTime()
  Routine introduction
    RoutineSettingsComponent introduction
      saveStartStop = False
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    TextComponent description_of_experiment
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        这个实验是一个定位任务。

        您的任务是识别接下来的图片里是人脸还是房子。

        请根据V（人脸）和nV（房子）的相对位置来按键。

        对应左边的按“1”，对应右边的按“2”。

        请实验员按“空格”键继续。
    KeyboardComponent start_experiment
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine probe_routine
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        trials.addData("image_onset_time", globalClock.getTime() - startTime)
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
        trigger_code = dict_answer[category]
      Each Frame:
        if not debug:
            if probe.status == STARTED and not stimulus_pulse_started:
                # update params
                win.callOnFlip(dev.activate_line, trigger_code)
                stimulus_pulse_start_time = globalClock.getTime()
                stimulus_pulse_started = True
            if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                    #win.callOnFlip(port.write, str.encode('0'))
                    stimulus_pulse_ended = True
    TextComponent preblank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $np.random.uniform(0.5,1,size = 1)[0]
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    ImageComponent probe
      image [set every repeat] = $image_name
      mask = circle
      size = $(image_size, image_size)
      startVal [condition] = $preblank.status == FINISHED
      stopVal [duration (frames)] = $probe_frame
      texture resolution = 256
      units = pix
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    TextComponent postblank
      letterHeight = 0.05
      startVal [condition] = $probe.status == FINISHED
      stopVal [duration (s)] = $np.random.uniform(0.5,1,size = 1)[0]
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  Routine response_routine
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    CodeComponent reponse_trigger_code
      Code Type = Auto->JS
      Begin Routine:
        trials.addData("discrim_resptime", globalClock.getTime() - startTime)

        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]

        idx = np.random.choice([0,1])
        msg = '{}'.format(resp_options[idx][0])

        trials.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1

        trials.addData('correctAns',temp_correctAns)

        # objective accuracy

        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0

        trials.addData('response.corr' , temp_corr)
    KeyboardComponent response
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent tell_response
      letterHeight = 0.1
      startVal [frame N] = 0.0
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      text [set every repeat]:
        $msg
  Routine End_experiment
    RoutineSettingsComponent End_experiment
      saveStartStop = False
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    TextComponent The_End
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Experiment:
        print(globalClock.getTime() - startTime)
        #print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
        #    meanvis,curr,meanacc))
  Routine fixation
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    TextComponent fixation_point
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine setupTRIGetc
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = dataframes/localizer.csv
    loopType = sequential
    nReps = 1
    random seed = 12345
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    conditions:
      [OrderedDict([('image_name', 'materials/nonliving/nonliving90.jpg'), ('category', 'Nonliving_Things')]),
      OrderedDict([('image_name', 'materials/face/face68.jpg'), ('category', 'Living_Things')]),
      OrderedDict([('image_name', 'materials/face/face67.jpg'), ('category', 'Living_Things')]),
      OrderedDict([('image_name', 'materials/face/face62.jpg'), ('category', 'Living_Things')]),
      OrderedDict([('image_name', 'materials/nonliving/nonliving95.jpg'), ('category', 'Nonliving_Things')]),
      OrderedDict([('image_name', 'materials/nonliving/nonliving7.jpg'), ('category', 'Nonliving_Things')]),
      OrderedDict([('image_name', 'materials/nonliving/nonliving94.jpg'), ('category', 'Nonliving_Things')]),
      OrderedDict([('image_name', 'materials/nonliving/nonliving18.jpg'), ('category', 'Nonliving_Things')]),
      OrderedDict([('image_name', 'materials/nonliving/nonliving16.jpg'), ('category', 'Nonliving_Things')]),
      OrderedDict([('image_name', 'materials/nonliving/nonliving64.jpg'), ('category', 'Nonliving_Things')]),
      OrderedDict([('image_name', 'materials/face/face98.jpg'), ('category', 'Living_Things')]),
      OrderedDict([('image_name', 'materials/nonliving/nonliving51.jpg'), ('category', 'Nonliving_Things')]),
      OrderedDict([('image_name', 'materials/face/face45.jpg'), ('category', 'Living_Things')]),
      OrderedDict([('image_name', 'materials/face/face75.jpg'), ('category', 'Living_Things')]),
      OrderedDict([('image_name', 'materials/nonliving/nonliving82.jpg'), ('category', 'Nonliving_Things')])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
    Routine fixation
    Routine probe_routine
    Routine response_routine
  LoopTerminator trials
  Routine End_experiment
